<?xml version='1.0'?>
<model name="hCactivating" xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#">
    <!--
*******************************************************
***         U   N   I   T   S                       ***
*******************************************************
-->
    <units name="s">
        <unit units="second"/>
    </units>
    <units name="nm">
        <unit prefix="micro" units="mole"/>
        <unit exponent="-1" units="liter"/>
    </units>
    <units name="first_order_rate_constant">
        <unit exponent="-1" units="s"/>
    </units>
    <units name="flux">
        <unit units="nm"/>
        <unit exponent="-1" units="s"/>
    </units>
    <units name="second_order_rate_constant">
        <unit exponent="-1" units="nm"/>
        <unit exponent="-1" units="s"/>
    </units>
    <!--
*********************************************************
***       C   O   M   P   O   N   E   N   T   S       ***
*********************************************************
-->
    <component name="environment">
        <variable name="t" public_interface="out" units="s"/>
    </component>
    <component name="hCactivating">
        <variable name="t" public_interface="in" units="second"/>
        <variable name="J1" public_interface="out" units="flux"/>
        <variable name="kf1" public_interface="in" units="second_order_rate_constant"/>
        <variable name="kb1" public_interface="in" units="first_order_rate_constant"/>
        <variable initial_value="105.2" name="hC" public_interface="out" units="nm"/>
        <!--0.1052-->
        <variable initial_value="98" name="dS2" units="nm"/>
        <variable initial_value="0" name="hCdS2" public_interface="out" units="nm"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>J1</ci>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>kf1</ci>
                        <ci>hC</ci>
                        <ci>dS2</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>kb1</ci>
                        <ci>hCdS2</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>hC</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J1</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>dS2</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J1</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>hCdS2</ci>
                </apply>
                <ci>J1</ci>
            </apply>
        </math>
    </component>
    <connection>
        <map_components component_1="hCactivating" component_2="environment"/>
        <map_variables variable_1="t" variable_2="t"/>
    </connection>
</model>
