// creator: Family McCormick; Given Matthew; Orgunit Auckland Bioengineering Institute; Orgname The University of Auckland; m.mccormick@auckland.ac.nz
// created: W3CDTF 2007-08-27T00:00:00+00:00
// modification: Checked model in COR. Added a couple of initial values, corrected the unit definitions and also several units in several equations.; W3CDTF 2007-10-04T11:06:52+13:00; Family Lloyd; Given Catherine; Other May
// comment: FN Catherine Lloyd; The model now runs in PCEnv to replicate the published results - we think! The only question mark is over how the variables are expressed - as nM in the model and then as %s in the figures. We're not sure why there's this difference.
// reference: Pubmed_id 12691603; Family Hatakeyama; Given Mariko; Family Kimura; Given Shuhei; Family Naka; Given Takashi; Family Kawasaki; Given Takuji; Family Yumoto; Given Noriko; Family Ichikawa; Given Mio; Family Kim; Given Jae-Hoon; Family Saito; Given Kazuki; Family Saeki; Given Mihoro; Family Shirouzu; Given Mikako; Family Yokoyama; Given Shigeyuki; Family Konagaya; Given Akihiko; title A computational model on the modulation of mitogen-activated protein kinase (MAPK) and Akt pathways in heregulin-induced ErbB signalling; volume 373; first_page 451; W3CDTF 2003-07-15; last_page 463; title The Biochemical Journal
// reference: subject_type keyword; _1 signal transduction; _2 cerebral aneurysm
// simulation: pointDensity 1000000; endingValue 500
def model hatakeyama_model_2003 as
  // *******************************************************
  // ***         U   N   I   T   S                       ***
  // *******************************************************
  def unit s as
    unit second;
  enddef;
  def unit um as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit flux as
    unit um;
    unit s {expo: -1};
  enddef;
  def unit second_order_rate_constant as
    unit um {expo: -1};
    unit s {expo: -1};
  enddef;
  def unit first_order_rate_constant as
    unit s {expo: -1};
  enddef;
  def unit um_per_second as
    unit um;
    unit s {expo: -1};
  enddef;
  // *********************************************************
  // ***       C   O   M   P   O   N   E   N   T   S       ***
  // *********************************************************

  def comp environment as
    var time: s {pub: out};
  enddef;

  def comp geometry as
    var time: s {priv: out, pub: in};
    var kf5: second_order_rate_constant {init: 100, priv: out};
    var kb5: first_order_rate_constant {init: 0.1, priv: out};
    var kf23: second_order_rate_constant {init: 100, priv: out};
    var kb23: first_order_rate_constant {init: 2, priv: out};
    var kf14: first_order_rate_constant {init: 0.00673, priv: out};
    var k14: um {init: 0.00807, priv: out};
    var kf29: second_order_rate_constant {init: 507000, priv: out};
    var kb29: first_order_rate_constant {init: 234, priv: out};
    var R_ShGS: um {init: 0, priv: out};
    var MEK: um {priv: in, pub: out};
    var PI3Kstar: um {priv: in, pub: out};
  enddef;
  def map between geometry and environment for
    vars time and time;
  enddef;

  def group as encapsulation for
    comp geometry incl
      comp PI3K;
      comp RAF;
      comp Akt;
      comp MEK;
    endcomp;
  enddef;
  def map between geometry and PI3K for
    vars kf5 and kf5;
    vars kb5 and kb5;
    vars kf23 and kf23;
    vars kb23 and kb23;
    vars R_ShGS and R_ShGS;
    vars time and time;
    vars PI3Kstar and PI3Kstar;
  enddef;
  def map between geometry and RAF for
    vars kf14 and kf14;
    vars k14 and k14;
    vars time and time;
  enddef;
  def map between geometry and MEK for
    vars MEK and MEK;
    vars time and time;
  enddef;
  def map between geometry and Akt for
    vars kf29 and kf29;
    vars kb29 and kb29;
    vars time and time;
  enddef;

  def comp PI3K as
    var time: s {pub: in};
    // var J25: um_per_second {pub: in};
    // var J26: um_per_second {pub: in};
    // var J27: um_per_second {pub: in};
    var pzap70: um {pub: in};
    var kf1: second_order_rate_constant {init: 1.2, pub: out};
    var kb1: first_order_rate_constant {init: 0.00076, pub: out};
    var kf2: second_order_rate_constant {init: 10, pub: out};
    var kb2: first_order_rate_constant {init: 0.1, pub: out};
    var kf3: first_order_rate_constant {init: 1, pub: out};
    var kb3: first_order_rate_constant {init: 0.01, pub: out};
    var kf34: first_order_rate_constant {init: 0.001, pub: out};
    var kb34: first_order_rate_constant {init: 0, pub: out};
    var V4: flux {init: 0.0625, pub: out};
    var k4: um {init: 0.050, pub: out};
    var kf5: second_order_rate_constant {pub: in};
    var kb5: first_order_rate_constant {pub: in};
    var kf6: first_order_rate_constant {init: 20, pub: out};
    var kb6: first_order_rate_constant {init: 5, pub: out};
    var kf7: second_order_rate_constant {init: 60000, pub: out};
    var kb7: first_order_rate_constant {init: 546, pub: out};
    var kf8: first_order_rate_constant {init: 2040, pub: out};
    var kb8: second_order_rate_constant {init: 15700000, pub: out};
    var kf9: first_order_rate_constant {init: 40.8, pub: out};
    var kb9: second_order_rate_constant {init: 0, pub: out};
    var V10: flux {init: 0.0000154, pub: out};
    var k10: um {init: 0.340, pub: out};
    var kf23: second_order_rate_constant {pub: in};
    var kb23: first_order_rate_constant {pub: in};
    var kf24: first_order_rate_constant {init: 9.85, pub: out};
    var kb24: first_order_rate_constant {init: 0.0985, pub: out};
    var kf25: first_order_rate_constant {init: 45.8, pub: out};
    var kb25: second_order_rate_constant {init: 47, pub: out};
    var V26: flux {init: 2.620, pub: out};
    var k26: um {init: 3.680, pub: out};
    var R: um {init: 0.0796};
    var Shc: um {init: 1.060, pub: out};
    // {pub: in};
    var PI3K: um {init: 0.00816};
    var HRG: um {init: 0.330};
    var R_HRG: um {init: 0};
    var R_HRG2: um {init: 0};
    var Internalisation: um {init: 0};
    var RP: um {init: 0};
    var R_Shc: um {init: 0};
    var R_ShP: um {init: 0, pub: out};
    var ShP: um {init: 0, pub: out};
    var R_ShGS: um {pub: in};
    var ShGS: um {init: 0, pub: out};
    var GS: um {init: 0.0105, pub: out};
    var R_PI3K: um {init: 0};
    var R_PI3Kstar: um {init: 0};
    var PI3Kstar: um {init: 0, pub: out};
    var two: dimensionless {init: 2, pub: out};
    var RP_normalised: um {pub: out};
    ode(R, time) = -kf1*R*HRG+kb1*R_HRG;
    ode(HRG, time) = -kf1*R*HRG+kb1*R_HRG;
    ode(R_HRG, time) = kf1*R*HRG-kb1*R_HRG-two*(kf2*R_HRG*R_HRG-kb2*R_HRG2);
    ode(R_HRG2, time) = kf2*R_HRG*R_HRG-kb2*R_HRG2-(kf3*R_HRG2-kb3*RP)+V4*RP/(k4+RP);
    ode(RP, time) = kf3*R_HRG2-kb3*RP-V4*RP/(k4+RP)-(kf5*RP*Shc-kb5*R_Shc)+kf8*R_ShGS-kb8*ShGS*RP-(kf23*RP*PI3K-kb23*R_PI3K)+kf25*R_PI3Kstar-kb25*RP*PI3Kstar-(kf34*RP-kb34*Internalisation);
    ode(Internalisation, time) = kf34*RP-kb34*Internalisation;
    ode(R_Shc, time) = kf5*pzap70*Shc-kb5*R_Shc-(kf6*R_Shc-kb6*R_ShP);
    ode(Shc, time) = -(kf5*pzap70*Shc-kb5*R_Shc)+V10*ShP/(k10+ShP);
    ode(R_ShP, time) = kf6*R_Shc-kb6*R_ShP-(kf7*R_ShP*GS-kb7*R_ShGS);
    ode(GS, time) = -(kf7*R_ShP*GS-kb7*R_ShGS)+kf9*ShGS-kb9*GS*ShP;
    ode(ShP, time) = kf9*ShGS-kb9*GS*ShP-V10*ShP/(k10+ShP);
    ode(R_ShGS, time) = kf7*R_ShP*GS-kb7*R_ShGS-(kf8*R_ShGS-kb8*ShGS*pzap70);
    ode(ShGS, time) = kf8*R_ShGS-kb8*ShGS*pzap70-(kf9*ShGS-kb9*GS*ShP);
    ode(R_PI3K, time) = kf23*RP*PI3K-kb23*R_PI3K-(kf24*R_PI3K-kb24*R_PI3Kstar);
    ode(PI3K, time) = -(kf23*RP*PI3K-kb23*R_PI3K)+V26*PI3Kstar/(k26+PI3Kstar);
    ode(R_PI3Kstar, time) = kf24*R_PI3K-kb24*R_PI3Kstar-(kf25*R_PI3Kstar-kb25*RP*PI3Kstar);
    ode(PI3Kstar, time) = kf25*R_PI3Kstar-kb25*RP*PI3Kstar-V26*PI3Kstar/(k26+PI3Kstar);
    RP_normalised = 2.5125{dimensionless}*(R_PI3K+R_PI3Kstar+R_Shc+R_ShGS+R_ShP+RP);
  enddef;

  def comp RasGDPtoRasGTP as
    var time: s {pub: in};
    var ShGS: um {pub: in};
    var RasGTP: um {init: 0, pub: out};
    var kf11: first_order_rate_constant {init: 0.222, pub: out};
    var k11: um {init: 0.000181, pub: out};
    var V12: flux {init: 0.000289, pub: out};
    var k12: um {init: 0.0000571, pub: out};
    var RasGDP: um {init: 0.120};
    ode(RasGDP, time) = -kf11*ShGS*RasGDP/(k11+RasGDP)+V12*RasGTP/(k12+RasGTP);
    ode(RasGTP, time) = kf11*ShGS*RasGDP/(k11+RasGDP)-V12*RasGTP/(k12+RasGTP);
  enddef;

  def comp RAF as
    var time: s {pub: in};
    var RasGTP: um {pub: in};
    var Akt_PIPP: um {pub: in};
    var RAF_star: um {init: 0, pub: out};
    var kf13: first_order_rate_constant {init: 1.53, pub: out};
    var k13: um {init: 0.0117, pub: out};
    var kf14: first_order_rate_constant {pub: in};
    var k14: um {pub: in};
    var E: um {init: 0.007, pub: out};
    var RAF: um {init: 0.0961, pub: out};
    ode(RAF, time) = kf14*(Akt_PIPP+E)*RAF_star/(k14+RAF_star)-kf13*RasGTP*RAF/(k13+RAF);
    ode(RAF_star, time) = -kf14*(Akt_PIPP+E)*RAF_star/(k14+RAF_star)+kf13*RasGTP*RAF/(k13+RAF);
  enddef;

  def comp Akt as
    var time: s {pub: in};
    var PI3Kstar: um {pub: in};
    var Akt_PIPP: um {init: 0.0, pub: out};
    var MEKP: um {pub: in};
    var MEKPP: um {pub: in};
    var kf27: first_order_rate_constant {init: 16.9, pub: out};
    var k27: um {init: 0.0391, pub: out};
    var V28: flux {init: 17, pub: out};
    var k28: um {init: 0.00902, pub: out};
    var kf29: second_order_rate_constant {pub: in};
    var kb29: first_order_rate_constant {pub: in};
    var V30: flux {init: 20, pub: out};
    var k30: um {init: 80, pub: out};
    var kf31: first_order_rate_constant {init: 0.107, pub: out};
    var k31a: um {init: 0.00435, pub: out};
    var V32: flux {init: 20, pub: out};
    var k32: um {init: 80, pub: out};
    var kf33: first_order_rate_constant {init: 0.211, pub: out};
    var k33a: um {init: 0.012, pub: out};
    var k16a: um {init: 2.200, pub: out};
    var k18a: um {init: 0.060, pub: out};
    var P: um {init: 0.895};
    var PIP3: um {init: 0};
    var Akt: um {init: 0.00868};
    var Akt_PIP3: um {init: 0};
    var Akt_PIP: um {init: 0, pub: out};
    var PP2A: um {init: 0.0114, pub: out};
    var one: dimensionless {init: 1, pub: out};
    var Akt_PIPP_normalised: um {pub: out};
    ode(P, time) = V28*PIP3/(k28+PIP3)-kf27*PI3Kstar*P/(k27+P);
    ode(PIP3, time) = -V28*PIP3/(k28+PIP3)+kf27*PI3Kstar*P/(k27+P)-(kf29*PIP3*Akt-kb29*Akt_PIP3);
    ode(Akt, time) = -(kf29*PIP3*Akt-kb29*Akt_PIP3);
    ode(Akt_PIP3, time) = kf29*PIP3*Akt-kb29*Akt_PIP3-V30*Akt_PIP3/(k30*(one+Akt_PIP/k32)+Akt_PIP3)+kf31*PP2A*Akt_PIP/(k31a*(one+MEKP/k16a+MEKPP/k18a+Akt_PIPP/k33a)+Akt_PIP);
    ode(Akt_PIP, time) = V30*Akt_PIP3/(k30*(one+Akt_PIP/k32)+Akt_PIP3)-kf31*PP2A*Akt_PIP/(k31a*(one+MEKP/k16a+MEKPP/k18a+Akt_PIPP/k33a)+Akt_PIP)-V32*Akt_PIP/(k32*(one+Akt_PIP3/k30)+Akt_PIP)+kf33*PP2A*Akt_PIPP/(k33a*(one+MEKP/k16a+MEKPP/k18a+Akt_PIP/k31a)+Akt_PIPP);
    ode(Akt_PIPP, time) = V32*Akt_PIP/(k32*(one+Akt_PIP3/k30)+Akt_PIP)-kf33*PP2A*Akt_PIPP/(k33a*(one+MEKP/k16a+MEKPP/k18a+Akt_PIP/k31a)+Akt_PIPP);
    Akt_PIPP_normalised = 11.52{dimensionless}*Akt_PIPP;
  enddef;

  def comp MEK as
    var time: s {pub: in};
    var RAF_star: um {pub: in};
    var MEKPP: um {init: 0, pub: out};
    var PP2Aa: um {init: 0.0114, pub: out};
    var MEKP: um {init: 0, pub: out};
    var MEK: um {init: 0.119, pub: out};
    var Akt_PIP: um {pub: in};
    var Akt_PIPP: um {pub: in};
    var kf15: first_order_rate_constant {init: 3.5, pub: out};
    var k15: um {init: 0.317, pub: out};
    var kf16: first_order_rate_constant {init: 0.058, pub: out};
    var k16: um {init: 2.200, pub: out};
    var kf17: first_order_rate_constant {init: 2.9, pub: out};
    var k17: um {init: 0.317, pub: out};
    var kf18: first_order_rate_constant {init: 0.058, pub: out};
    var k18: um {init: 0.060, pub: out};
    var k31: um {init: 0.00435, pub: out};
    var k33: um {init: 0.012, pub: out};
    var one_a: dimensionless {init: 1, pub: out};
    var MEKPP_normalised: um {pub: out};
    ode(MEK, time) = -kf15*RAF_star*MEK/(k15*(one_a+MEKP/k17)+MEK)+kf16*PP2Aa*MEKP/(k16*(one_a+MEKPP/k18+Akt_PIP/k31+Akt_PIPP/k33)+MEKP);
    ode(MEKP, time) = kf15*RAF_star*MEK/(k15*(one_a+MEKP/k17)+MEK)-kf16*PP2Aa*MEKP/(k16*(one_a+MEKPP/k18+Akt_PIP/k31+Akt_PIPP/k33)+MEKP)-kf17*RAF_star*MEKP/(k17*(one_a+MEK/k15)+MEKP)+kf18*PP2Aa*MEKPP/(k18*(one_a+MEKP/k16+Akt_PIP/k31+Akt_PIPP/k33)+MEKPP);
    ode(MEKPP, time) = kf17*RAF_star*MEKP/(k17*(one_a+MEK/k15)+MEKP)-kf18*PP2Aa*MEKPP/(k18*(one_a+MEKP/k16+Akt_PIP/k31+Akt_PIPP/k33)+MEKPP);
    MEKPP_normalised = 0.84{dimensionless}*MEKPP;
  enddef;

  def comp ERK as
    var time: s {pub: in};
    var MEKPP: um {pub: in};
    var MKP3: um {init: 0.0024, pub: out};
    var ERK: um {init: 1.01};
    // 0.0003
    var ERKP: um {init: 0};
    var ERKPP: um {init: 0, pub: out};
    var J_ERKPP: flux {pub: out};
    var kf19: first_order_rate_constant {init: 9.5, pub: out};
    var k19: um {init: 146, pub: out};
    var kf20: first_order_rate_constant {init: 0.300, pub: out};
    var k20: um {init: 0.160, pub: out};
    var kf21: first_order_rate_constant {init: 16, pub: out};
    var k21: um {init: 146, pub: out};
    var kf22: first_order_rate_constant {init: 0.270, pub: out};
    var k22: um {init: 0.060, pub: out};
    var one_b: dimensionless {init: 1, pub: out};
    var ERKPP_normalised: um {pub: out};
    J_ERKPP = kf21*MEKPP*ERKP/(k21*(one_b+ERK/k19)+ERKP)-kf22*MKP3*ERKPP/(k22*(one_b+ERKP/k20)+ERKPP);
    ode(ERK, time) = -kf19*MEKPP*ERK/(k19*(one_b+ERKP/k21)+ERK)+kf20*MKP3*ERKP/(k20*(one_b+ERKPP/k22)+ERKP);
    ode(ERKP, time) = kf19*MEKPP*ERK/(k19*(one_b+ERKP/k21)+ERK)-kf20*MKP3*ERKP/(k20*(one_b+ERKPP/k22)+ERKP)-kf21*MEKPP*ERKP/(k21*(one_b+ERK/k19)+ERKP)+kf22*MKP3*ERKPP/(k22*(one_b+ERKP/k20)+ERKPP);
    ode(ERKPP, time) = J_ERKPP;
    ERKPP_normalised = 0.099{dimensionless}*J_ERKPP;
  enddef;
  // def map between PI3K and environment for
  //     vars time and time;
  // enddef;
  // def map between Akt and environment for
  //     vars time and time;
  // enddef;
  // def map between RAF and environment for
  //     vars time and time;
  // enddef;
  def map between RasGDPtoRasGTP and environment for
    vars time and time;
  enddef;
  def map between MEK and environment for
    vars time and time;
  enddef;
  def map between ERK and environment for
    vars time and time;
  enddef;
  def map between PI3K and RasGDPtoRasGTP for
    vars ShGS and ShGS;
  enddef;
  def map between RasGDPtoRasGTP and RAF for
    vars RasGTP and RasGTP;
  enddef;
  def map between RAF and Akt for
    vars Akt_PIPP and Akt_PIPP;
  enddef;
  def map between Akt and MEK for
    vars MEKP and MEKP;
    vars MEKPP and MEKPP;
    vars Akt_PIP and Akt_PIP;
    vars Akt_PIPP and Akt_PIPP;
  enddef;
  def map between ERK and MEK for
    vars MEKPP and MEKPP;
  enddef;
  def map between RAF and MEK for
    vars RAF_star and RAF_star;
  enddef;
  def map between PI3K and Akt for
    vars PI3Kstar and PI3Kstar;
  enddef;
enddef;
